PsychoPy2experiment version="2024.2.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1280, 800]
  expName = wordpriming
  keyboardBackend = ioHub
  runMode = 1
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Routines
  Routine trial
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8.0
      text [set every repeat] = $study_test
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    SliderComponent slider
      forceEndRoutine = True
      granularity = 0
      labels = "Familiar","Unfamiliar"
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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  Routine test
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    TextComponent text_2
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
      text [set every repeat] = $test_word
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    TextboxComponent textbox
      bold = False
      editable = True
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
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    TextComponent text_3
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
      text = Click to Submit
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    MouseComponent mouse
      clickable = text_3
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = C:/Users/User/Desktop/AU/SEM5/PSY310/Experiments/study_test.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'study_test': 'vase'},
      {'study_test': 'tiger'},
      {'study_test': 'book'},
      {'study_test': 'cushion'},
      {'study_test': 'piano'}]
    Routine trial
  LoopTerminator trials
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = C:/Users/User/Desktop/AU/SEM5/PSY310/Experiments/test.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'test_word': 'l_pt_p', 'Reference': 'Laptop', 'old_new': 'old'},
      {'test_word': '_ha_t', 'Reference': 'Chart', 'old_new': 'old'},
      {'test_word': 'T_hi_t', 'Reference': 'Tshirt', 'old_new': 'old'},
      {'test_word': '_ou_se', 'Reference': 'mouse', 'old_new': 'old'},
      {'test_word': 'P_str_', 'Reference': 'Pastry', 'old_new': 'old'},
      {'test_word': 'c_s_', 'Reference': 'Case', 'old_new': 'old'},
      {'test_word': '_ru_s_', 'Reference': 'Cruise', 'old_new': 'old'},
      {'test_word': 'P_li_e', 'Reference': 'Police', 'old_new': 'old'},
      {'test_word': 'K_y_', 'Reference': 'Keys', 'old_new': 'old'},
      {'test_word': 'P_st_r', 'Reference': 'Poster', 'old_new': 'old'},
      {'test_word': '_o_rd', 'Reference': 'Board', 'old_new': 'old'},
      {'test_word': '_a_bl_', 'Reference': 'Marble', 'old_new': 'old'},
      {'test_word': '_ho_e', 'Reference': 'Phone', 'old_new': 'old'},
      {'test_word': '_oo_', 'Reference': 'Book', 'old_new': 'old'},
      {'test_word': 'c_s_io_', 'Reference': 'Cushion', 'old_new': 'old'},
      {'test_word': 't_a_l_', 'Reference': 'Table', 'old_new': 'new'},
      {'test_word': 'p_nc_l', 'Reference': 'Pencil', 'old_new': 'new'},
      {'test_word': 'v_s_', 'Reference': 'Vase', 'old_new': 'new'},
      {'test_word': 'bo_t_e', 'Reference': 'Bottle', 'old_new': 'new'},
      {'test_word': 'c_m_ra', 'Reference': 'Camera', 'old_new': 'new'}]
    Routine test
  LoopTerminator trials_2
