PsychoPy2experiment version="2024.2.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'age': ''}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [1280, 800]
  expName = imagecondition1
  keyboardBackend = ioHub
  runMode = 1
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Routines
  Routine trial
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    PolygonComponent fixation
      fillColor = white
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    TextComponent text
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 1.0
      text [set every repeat] = $word
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    ImageComponent image
      image [set every repeat] = $imagefile
      pos = (0, 0.1)
      size = (0.5, 0.3)
      startVal [time (s)] = 1.0
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    TextboxComponent textbox
      bold = False
      editable = True
      letterHeight = 0.05
      pos = (0, -0.1)
      size = (0.5, 0.5)
      startVal [time (s)] = 1.0
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    ButtonComponent button
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0, -0.2)
      size = (0.3, 0.1)
      startVal [time (s)] = 1.0
      text [set every repeat] = Submit
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  Routine recalltest
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    TextboxComponent textbox_2
      bold = False
      editable = True
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 90.0
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    ButtonComponent button_2
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (0.3, 0.1)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 90.0
      text = Submit
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  Routine phase2
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        This is a surprise recall test. Please write as many words as you can recall. Write the words with commas in between them (XXX, YYY and so on). You can take a maximum of 90 seconds for this task.

        Once done, please click on 'Submit'.

        Please click on the 'spacebar' once you are ready.
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine phase1
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    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Instructions:
        Please identify whether the following words are nouns or verbs and type the response as "noun" or "verb."

        Once done, click on 'Submit'.

        Please click the 'spacebar' to proceed.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine thankyou
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    TextComponent text_4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text = The experiment is over. Thank you for your time.
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Flow
  Routine phase1
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = imagecondition.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('word', 'stove'), ('imagefile', 'images/stove.jpg'), ('category', 'noun')]),
      OrderedDict([('word', 'refrigerator'), ('imagefile', 'images/refrigerator.jpg'), ('category', 'noun')]),
      OrderedDict([('word', 'microwave'), ('imagefile', 'images/microwave.jpg'), ('category', 'noun')]),
      OrderedDict([('word', 'cooker'), ('imagefile', 'images/cooker.jpg'), ('category', 'noun')]),
      OrderedDict([('word', 'jar'), ('imagefile', 'images/jar.jpg'), ('category', 'noun')]),
      OrderedDict([('word', 'knife'), ('imagefile', 'images/knife.jpg'), ('category', 'noun')]),
      OrderedDict([('word', 'rolling pin'), ('imagefile', 'images/rollingpin.jpg'), ('category', 'noun')]),
      OrderedDict([('word', 'garbage bin'), ('imagefile', 'images/garbagebin.jpg'), ('category', 'noun')]),
      OrderedDict([('word', 'bottle opener'), ('imagefile', 'images/bottleopener.jpg'), ('category', 'noun')]),
      OrderedDict([('word', 'dish soap'), ('imagefile', 'images/dishsoap.jpg'), ('category', 'noun')]),
      OrderedDict([('word', 'ice tray'), ('imagefile', 'images/icetray.jpg'), ('category', 'noun')]),
      OrderedDict([('word', 'fruit basket'), ('imagefile', 'images/fruitbasket.jpg'), ('category', 'noun')]),
      OrderedDict([('word', 'chopping'), ('imagefile', 'images/chopping.jpg'), ('category', 'verb')]),
      OrderedDict([('word', 'blending'), ('imagefile', 'images/blending.jpg'), ('category', 'verb')]),
      OrderedDict([('word', 'boiling'), ('imagefile', 'images/boiling.jpg'), ('category', 'verb')])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
    Routine trial
  LoopTerminator trials
  Routine phase2
  Routine recalltest
  Routine thankyou
