PsychoPy2experiment version="2024.2.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': '', 'age': '', 'school': '', 'sex': 'M or F', 'condition': ''}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [1280, 800]
  expName = labsoloproject
  keyboardBackend = ioHub
  runMode = 1
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Routines
  Routine semantic_processing
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    PolygonComponent fixation
      fillColor = white
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    TextComponent text_2
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 1.0
      text [set every repeat] = $word
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    TextboxComponent textbox
      bold = False
      editable = True
      letterHeight = 0.05
      pos = (0, -0.1)
      size = (0.5, 0.5)
      startVal [time (s)] = 1.0
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    ButtonComponent button_2
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (0.3, 0.1)
      startVal [time (s)] = 1.0
      text = Submit
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  Routine recalltest
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    TextboxComponent textbox_2
      bold = False
      editable = True
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 90.0
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    ButtonComponent button
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (0.3, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 90.0
      text = Submit
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  Routine phase2
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    TextComponent instruction2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        This is a surprise recall test. Please write as many words as you can recall. Write the words with commas in between them (XXX, YYY and so on). You can take a maximum of 90 seconds for this task.

        Once done, please click on 'Submit'.

        Please click on the 'spacebar' once you are ready.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine phase1
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    TextComponent instruction1
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Instructions:
        Please identify whether the following words are nouns or verbs and type the response as "noun" or "verb."

        Once done, click on 'Submit'.

        Please click the 'spacebar' to proceed.
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine thankyou
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    TextComponent thankyoutext
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text = The experiment is over. Thank you for your time.
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Flow
  Routine phase1
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = noimagecondition2.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'word': 'stove', 'category': 'noun'},
      {'word': 'refrigerator', 'category': 'noun'},
      {'word': 'microwave', 'category': 'noun'},
      {'word': 'cooker', 'category': 'noun'},
      {'word': 'jar', 'category': 'noun'},
      {'word': 'knife', 'category': 'noun'},
      {'word': 'rolling pin', 'category': 'noun'},
      {'word': 'garbage bin', 'category': 'noun'},
      {'word': 'bottle opener', 'category': 'noun'},
      {'word': 'dish soap', 'category': 'noun'},
      {'word': 'ice tray', 'category': 'noun'},
      {'word': 'fruit basket', 'category': 'noun'},
      {'word': 'chopping', 'category': 'verb'},
      {'word': 'blending', 'category': 'verb'},
      {'word': 'boiling', 'category': 'verb'},
      {'word': 'frying', 'category': 'verb'},
      {'word': 'baking', 'category': 'verb'},
      {'word': 'grilling', 'category': 'verb'},
      {'word': 'whisking', 'category': 'verb'},
      {'word': 'peeling', 'category': 'verb'},
      {'word': 'grating', 'category': 'verb'},
      {'word': 'garnishing', 'category': 'verb'},
      {'word': 'mashing', 'category': 'verb'},
      {'word': 'grinding', 'category': 'verb'}]
    Routine semantic_processing
  LoopTerminator trials
  Routine phase2
  Routine recalltest
  Routine thankyou
